PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent fixation
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.5
      fillColor = white
      size = (10,10)
      units = pix
      shape = circle
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    TextComponent text
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      color [set every repeat] = $colour
      text [set every repeat] = $word
      letterHeight = 0.05
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    KeyboardComponent key_resp
      startVal [time (s)] = 0.5
      forceEndRoutine = True
      allowedKeys = 'r','b'
      storeCorrect = True
      correctAns = $correct_res
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  Routine ins
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    TextComponent text_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome
      letterHeight = 0.05
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  Routine thanks
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    TextComponent text_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank You! 
      letterHeight = 0.05
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    conditionsFile = STROOP/Book1.xlsx
    nReps = 10
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
  Routine thanks
